<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.0.1">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q2="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:q3="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q4="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:q5="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q5:AudioCapture">
          <q5:Frequency>44100</q5:Frequency>
          <q5:BufferLength>10</q5:BufferLength>
        </Generator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q4:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q4:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Val0</Selector>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q1:LoadImage">
          <q1:FileName>Level.png</q1:FileName>
          <q1:Mode>Unchanged</q1:Mode>
        </Generator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings>
          <PropertyMapping name="ThresholdValue" selector="Source2" />
        </PropertyMappings>
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>107.0142</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>Truncate</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfDoubleThreshold">
        <MemberName>ThresholdValue</MemberName>
        <Name>ThresholdValue</Name>
        <Value>128</Value>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>10000</Value>
        </Operand>
        <PropertyMappings />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Audio.AudioCapture, Bonsai.Audio, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Abs, Bonsai.Dsp, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.Sum, Bonsai.Dsp, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Double, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>